PsychoPy2experiment version="2021.2.3"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['participant'], expInfo['session'], expName)
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2240, 1260]
  color = white
  expName = joplin1
  logging level = debug
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Routines
  Routine stimTrain
    CodeComponent train_code
      Code Type = Auto->JS
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      Begin Routine:
        # define the image path for the image component
        train_stim = (stimulus_set + str(stim_id.replace(' ', '')) + '.jpg')
        thisExp.addData('stim_id2', str(stim_id.replace(' ', '')))
    ImageComponent train_image
      image [set every repeat] = $train_stim
      interpolate = nearest
      pos = (0, 0.1)
      saveStartStop = False
      size = img_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    TextComponent catA_train
      color = black
      letterHeight = 0.075
      pos = (-0.4, -0.35)
      saveStartStop = False
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 2.0
      text = $session_cat["categorya"]
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    TextComponent catB_train
      color = black
      letterHeight = 0.075
      pos = (0.4, -0.35)
      saveStartStop = False
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 2.0
      text = $session_cat["categoryb"]
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    KeyboardComponent train_key
      allowedKeys = 'f','j'
      correctAns = $correct_key
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
      storeCorrect = True
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  Routine feedback
    CodeComponent feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        #rename the category to input into the feedback loop
        if category == 'categoryA':
            category_name = session_cat['categorya']
        if category == 'categoryB':
            category_name = session_cat['categoryb']


        if not train_key.keys:
            feedback = 'Oops...you failed to respond within the alloted time.'
        elif train_key.corr == 1:
            feedback = 'Correct.\n\n The answer was ' + category_name +'.'
        else:
            feedback = 'Incorrect.\n\n The answer was ' + category_name +'.'
    TextComponent feedback_text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $feedback
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  Routine ITI
    PolygonComponent fix1000
      fillColor = black
      saveStartStop = False
      shape = cross
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine welcome_initializing
    CodeComponent paths_and_seeds
      Code Type = Auto->JS
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      Begin Experiment:
        #import important packages
        import random

        #set random seed for experiment
        random_seed = int(expInfo['participant'])
        random.seed(random_seed)

        #create list of random numbers to randomize run order for each participant
        train_run_order = random.sample(range(1,100), 8)
        print(train_run_order)
        test_run_order = random.sample(range(1,100), 2)
        print(test_run_order)

        #define stimulus sets and categories
        stim_set1 = '/Volumes/shares/Cabi/stimuli/cartoon_animals/Set1/'
        stim_set2 = '/Volumes/shares/Cabi/stimuli/cartoon_animals/Set2/'
        category1 = {'categorya': 'Batmans', 'categoryb': 'Robins'}
        category2 = {'categorya': 'Wallaces', 'categoryb': 'Gromets'}
        if expInfo['session'] == '001':
            if (int(expInfo['participant'])%4) == 0:
                stimulus_set = stim_set1
                session_cat = category1
            if (int(expInfo['participant'])%4) == 1:
                stimulus_set = stim_set2
                session_cat = category1
            if (int(expInfo['participant'])%4) == 2:
                stimulus_set = stim_set1
                session_cat = category2
            if (int(expInfo['participant'])%4) == 3:
                stimulus_set = stim_set2
                session_cat = category2

        if expInfo['session'] == '002':
            if (int(expInfo['participant']) %4) == 0:
                stimulus_set = stim_set2
                session_cat = category2
            if (int(expInfo['participant'])%4) == 1:
                stimulus_set = stim_set1
                session_cat = category2
            if (int(expInfo['participant'])%4) == 2:
                stimulus_set = stim_set2
                session_cat = category1
            if (int(expInfo['participant'])%4) == 3:
                stimulus_set = stim_set1
                session_cat = category1

        # define the image size depending on where the image is coming from
        if stimulus_set == stim_set2:
            img_size = [0.55, 0.55]
        if stimulus_set == stim_set1:
            img_size = [0.4,0.6]
    CodeComponent random_prototype
      Code Type = Auto->JS
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      Begin Experiment:
        # import the script and use the randpro_select function to establish a random prototype for the rest of the experiment
        import stim_build as sb
        randpro = sb.randpro_select('/Volumes/shares/Cabi/exp/joplin/joplin1/stim_files/prototype.csv', random_seed)
        logging.log(level = logging.EXP, msg = randpro)
    CodeComponent welcome_inst_text
      Code Type = Auto->JS
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      Begin Experiment:
        if expInfo['session'] == '001':
            welc_text = u'Welcome to the experiment! \n\n You will first complete a training phase where you will be presented images of cartoon animals and asked to determine whether they belong to the %s group or the %s group.\n\n You will not know which group the animals belong to at first. However, you will be given feedback on your answer, which you can then use to help you group the animals.\n\n Press SPACE to continue with the instructions.' % (session_cat['categorya'], session_cat['categoryb'])
        if expInfo['session'] == '002':
            welc_text = u'Welcome to the experiment!\n\n Similar to the last session, you will start by completing a training phase where you will group cartoon animals into two different groups. This time, you will be asked to determine if the animal belongs to the %s group or the %s group. Remember, you will not know which group the animal belongs to at first, but will be given feedback on your answers that you can then use to help you group the animals.\n\n Press SPACE to continue with the instructions.' % (session_cat['categorya'], session_cat['categoryb'])
    TextComponent welcome_text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $welc_text
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    KeyboardComponent welcome_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine stimTest
    CodeComponent test_code
      Code Type = Auto->JS
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      Begin Routine:
        test_stim = (stimulus_set + str(stim_id.replace(' ', '')) + '.jpg')
    ImageComponent test_image
      image [set every repeat] = $test_stim
      interpolate = nearest
      pos = (0, 0.1)
      saveStartStop = False
      size = img_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    TextComponent catA_test
      color = black
      letterHeight = 0.075
      pos = (-0.4, -0.35)
      saveStartStop = False
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 2.0
      text = $session_cat["categorya"]
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    TextComponent catB_test
      color = black
      letterHeight = 0.075
      pos = (0.4, -0.35)
      saveStartStop = False
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 2.0
      text = $session_cat["categoryb"]
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    KeyboardComponent test_key
      allowedKeys = 'f','j'
      correctAns = $correct_key
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
      storeCorrect = True
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  Routine debrief
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        os.remove('/Volumes/shares/Cabi/exp/joplin/joplin1/data/_train_cond.csv')
        os.remove('/Volumes/shares/Cabi/exp/joplin/joplin1/data/_training_stim.csv')
        os.remove('/Volumes/shares/Cabi/exp/joplin/joplin1/data/genfile1.csv')
        os.remove('/Volumes/shares/Cabi/exp/joplin/joplin1/data/genfile2.csv')
    TextComponent debrief_text
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating in this experiment!

        We are interested in how people both remember details of specific experiences and how they build general knowledge. The task you completed today involved learning to sort stimuli into categories. In doing so, you needed to form a general idea of what members of each category were like – that is memory for generalities. However, you may have also learned to identify individual category members – that is memory specificity. We are interested in how well people are able to learn both types of information – generalities and specifics – from the same set of stimuli.

        Press SPACE to continue.
    KeyboardComponent end_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine demo
    FormComponent demo_form
      Data Format = rows
      Font = Open Sans
      Item Padding = 0.05
      Items = .csv
      Randomize = False
      Style = dark
      Text Height = 0.03
      itemColor = white
      markerColor = red
      responseColor = white
      size = (1, 0.7)
      startVal [time (s)] = 0.0
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  Routine run_break
    TextComponent run_break_text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You will now be given a short break before continuing the experiment.

        When you are ready to proceed, press SPACE.
    KeyboardComponent break_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine consent1
    TextComponent consent1_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Study title: Joplin
        Researcher: Madeline Valdez

        We’re inviting you to participate in a research study. Participation is completely voluntary. If you agree to participate now, you can always change your mind later and stop. There are no negative consequences, whatever you decide.

        Press SPACE to continue.
    KeyboardComponent consent1_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine consent2
    TextComponent consent2_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        What is the purpose of this study?

        We are interested in how people both remember details of specific experiences and how they build general knowledge. We are interested in how each type of memory helps guide decisions in new situations. We are also interested in how these processes change across the lifespan.

        Press SPACE to continue.
    KeyboardComponent consent2_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine consent3
    TextComponent consent3_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        What will I do?

        You will be asked to complete a series of cognitive tasks on the computer. These tasks will involve seeing images and making different kinds of judgments about them. You may also be asked to provide demographic information (age, gender, race) and your subjective experience of the tasks.

        Press SPACE to continue.
    KeyboardComponent consent3_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine consent4
    TextComponent consent4_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Risks

        Breach of confidentiality: There is a chance your data could be seen by someone who shouldn’t have access to it.

        We’re minimizing this risk in the following ways:

        We’ll store all electronic data on a password-protected, encrypted computer.

        We’ll keep your identifying information separate from your research data, but we’ll be able to link it to you by using a study ID.

        Press SPACE to continue.
    KeyboardComponent consent4_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine consent5
    TextComponent consent5_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Possible benefits:

        To individual: none
        To society: A better understanding of learning and memory function

        How long will it take? Each session will take approximately 1 hour
        Costs: None
        Compensation: 1 credit hour

        Press SPACE to continue.
    KeyboardComponent consent5_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine consent6
    TextComponent consent6_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        If I don’t want to be in this study, are there other options?

        Instead of participating, you can contact the UWM SONA systems administrator for alternative extra credit options. These options are likely to include written assignments that are designed to require as much time to complete as the research participation.

        Press SPACE to continue.
    KeyboardComponent consent6_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine consent7
    TextComponent consent7_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Future research: De-identified (all identifying information removed) data will likely be shared with other researchers via public repositories. Allowing open access to de-identified data will allow other researchers to verify the results of the study and potentially address additional scientific questions that data generated from this study have bearing on.

        Press SPACE to continue.
    KeyboardComponent consent7_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine consent8
    TextComponent consent8_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Confidentiality and Data Security

        We may collect the following identifying information for the research: your name, date of birth, and contact information. Recording your name is necessary to track whether you have participated in studies within our lab that have used other recruitment tools. Date of birth information is necessary to calculate precise age information. Contact information may be necessary to follow up about future participation.


        Press SPACE to continue.
    KeyboardComponent consent8_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine consent9
    TextComponent consent9_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Where will data be stored?
        On UWM’s servers and on servers for the hosting site (Qualtrics or Pavlovia). De-identified data (i.e., with names and dates of birth removed) may be uploaded to public data repositories.

        How long will it be kept?
        De-identified data (i.e., with names and dates of birth removed) may be uploaded to public repositories and stored there indefinitely. Name, date of birth, and contact information, stored separately from your data and linked through a subject identification number, may also be kept indefinitely. We store this information to track who has participated in experiments in our lab so that people do not participate in multiple experiments that conflict with one another. If you wish to have this information removed from our database, contact the Researcher at valdez3@uwm.edu.

        Press SPACE to continue.
    KeyboardComponent consent9_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine consent10
    TextComponent consent10_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Who can see my data?

        We (the researchers) will have access to identifiable information (name, birthdate, and contact information) as well as coded data. This is so we can analyze the data and conduct the study. Identifiable information will be available to the researchers but kept separately from other data in a password protected database. All demographic information, debriefing questions, and data from cognitive tasks will use a subject ID code that is linked to your identifiable information only through the password protected database.

        Agencies that enforce legal and ethical guidelines, such as…

        The Institutional Review Board (IRB) at UWM
        The Office for Human Research Protections (OHRP)

        We may share our findings in publications or presentations or upload data to a public repository. If we do, the results will be aggregate (grouped) data, with no individual results and/or de-identified (no names, birthdate, address, etc.).

        Press SPACE to continue.
    KeyboardComponent consent10_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine consent11
    TextComponent consent11_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Questions about the research, complaints, or problems: Contact Madeline Valdez via email at valdez3@uwm.edu.



        Questions about your rights as a research participant, complaints, or problems: Contact the UWM IRB (Institutional Review Board) at 414-662-3544 / irbinfo@uwm.edu.
    KeyboardComponent consent11_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine consent12
    TextComponent consent12_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Agreement to Participate

        Your participation is completely voluntary, and you can withdraw at any time.

        To take this survey, you must be:

        • At least 18 years old

        • Fluent in English

        • Cognitively healthy (i.e., no history of neurological issues such as stroke, head injury or a neurological disease)

        At the end of the experiment, there will be an opportunity to download the consent information. If you withdraw before the end of the experiment, contact the researcher for a copy of the consent.

        If you meet these criteria and would like to participate in the study, press SPACE.
    KeyboardComponent consent12_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine train_begin
    CodeComponent stim_train_recode
      Code Type = Auto->JS
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      Begin Experiment:
        # run the create_train_set to create the training set, recoded to match the prototype
        #output will be /data/_training_stim
        sb.create_train_set('/Volumes/shares/Cabi/exp/joplin/joplin1/stim_files/train_file.csv', randpro)
        os.rename('/Volumes/shares/Cabi/exp/joplin/joplin1/data/_training_stim.csv', filename + '_training_stim.csv')
        # this refers to the training file that will be needed to create the generalization sets
        training_stimuli = filename + '_training_stim.csv'
      Begin Routine:
        # Take the training set and input into the cond_file_build function. This functino will add all the necessary components to the file, like the category and correct key response.
        sb.train_cond_file(training_stimuli, randpro, random_seed)

        #rename the file to train_conditions and use this file for the loop.
        os.rename('/Volumes/shares/Cabi/exp/joplin/joplin1/data/cond_file.csv', filename + '_train_cond.csv')
    TextComponent train_begin_text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to start the training phase. 
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    KeyboardComponent train_begin_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine train_instruct1
    CodeComponent train_inst1_code
      Code Type = Auto->JS
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      Begin Experiment:
        inst1_train_text = u'For each image, you will have 3 seconds to give your response before the computer automatically moves to the next screen.\n\n To select %s, press "f".\n To select %s, press "j".\n\n Press "f" or "j" to continue with the instructions.' % (session_cat['categorya'], session_cat['categoryb'])
    TextComponent train_inst1_text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $inst1_train_text
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    KeyboardComponent train_inst1_key
      allowedKeys = 'f','j'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine train_instruct2
    TextComponent train_inst2_text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You will complete 8 runs of the training phase. Between each run, you will be given the opportunity to take a break. You may take as long as you need before returning to the experiemnt.

        Press SPACE to continue.
    KeyboardComponent train_inst2_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine train_instruct3
    TextComponent train_inst3_text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent train_inst3_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine test_instruct1
    CodeComponent test_inst1_code
      Code Type = Auto->JS
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      Begin Experiment:
        inst1_test_text = u'You will now begin the testing phase. This phase is identical to the training phase except you will not be given feedback on your answers.\n\n To select %s, press "f".\n To select %s, press "j".\n\n Press "f" or "j" to continue with the instructions.' % (session_cat['categorya'], session_cat['categoryb'])
    TextComponent test_inst1_text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $inst1_test_text
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    KeyboardComponent test_inst1_key
      allowedKeys = 'f', 'j'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine test_instruct2
    TextComponent test_inst2_text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You will complete 2 runs of the testing phase. Between each run, you will be given the opportunity to take a break. You may take as long as you need before returning to the experiment.

        Press SPACE to continue.
    KeyboardComponent test_inst2_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine test_begin
    CodeComponent stim_test_code
      Code Type = Auto->JS
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      Begin Experiment:
        #define input variables
        prototype_file = '/Volumes/shares/Cabi/exp/joplin/joplin1/stim_files/prototype.csv'
        num_rows2add = 10
        num_proto = 2
        num_train_stim = 14

        #run gen_build function to produce generalization set. Will output two .csv files named genfile1 and genfile2
        sb.gen_build(training_stimuli, prototype_file, randpro, num_rows2add, num_proto, num_train_stim, random_seed)
        os.rename('/Volumes/shares/Cabi/exp/joplin/joplin1/data/genfile1.csv', filename + 'genfile1.csv')
        os.rename('/Volumes/shares/Cabi/exp/joplin/joplin1/data/genfile2.csv', filename + 'genfile2.csv')
    TextComponent test_begin_text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to start the testing phase. 
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    KeyboardComponent test_begin_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine test_instuct3
    TextComponent test_inst3_text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        There will be 2 runs of the training phase. Between each run, you will be given the opportunity to take a break. You may take as long as you need before proceeding with the experiment.

        Press SPACE to continue with the instructions.
    KeyboardComponent test_inst3_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine exp_end
    TextComponent end_text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        This concludes the experiment. Please let the researcher know you are finished and they will give you a short debrief of the experiment.

        Thank you again for your participation!
    CodeComponent end_code
      Code Type = Auto->JS
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      End Experiment:
        os.remove(filename + '_train_cond.csv')
        os.remove(filename + 'genfile1.csv')
        os.remove(filename + 'genfile2.csv')
        os.remove(filename + '_training_stim.csv')
  Routine demo_2
    CodeComponent demo2_code
      Code Type = Auto->JS
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      Begin Routine:
        if expInfo['session'] == '001':
            continueRoutine = False

        modify = False
        gender.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                gender.text = gender.text + ' '
            elif 'backspace' in keys:
                gender.text = gender.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    gender.text = gender.text + keys[0].upper()
                    modify = False
                else:
                    gender.text = gender.text + keys[0]
      End Routine:
        thisExp.addData("gender_string", gender.text)
    TextComponent demo2_instr_text
      color = black
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = What is your gender?
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    TextComponent demo2_submit_text
      color = black
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press ENTER/RETURN to submit response.
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    TextComponent gender
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine demoForm
    CodeComponent demo_form_code
      Code Type = Auto->JS
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      Begin Routine:
        if expInfo['session'] == '001':
            continueRoutine = False
    FormComponent form
      Data Format = rows
      Font = Open Sans
      Item Padding = 0.05
      Items = demo_form.xlsx
      Randomize = False
      Style = dark
      Text Height = 0.03
      itemColor = white
      markerColor = red
      pos = (0, 0.1)
      responseColor = white
      saveStartStop = False
      size = (1, 0.7)
      startVal [time (s)] = 0.0
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    KeyboardComponent form_key
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent form_inst
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press ENTER/RETURN to submit your response
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  Routine demo_form_instruct1
    CodeComponent demo_instr1_code
      Code Type = Auto->JS
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      Begin Routine:
        if expInfo['session'] == '001':
            continueRoutine = False
    TextComponent demo_instr1_text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        While filling out the questionaire, please use the computer mouse to select the answer that applies to you. Use the red slider on the right of the screen to scroll to view more questions. Please make sure you answer all of the questions.

        When you have completed all of the questions, press ENTER/RETURN to submit your response.

        Press ENTER/RETURN to continue to the demographics questionaire.
    KeyboardComponent demo_inst1_key
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine demo_3
    CodeComponent demo3_code
      Code Type = Auto->JS
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      Begin Routine:
        if expInfo['session'] == '001':
            continueRoutine = False

        modify = False
        age.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                age.text = age.text + ' '
            elif 'backspace' in keys:
                age.text = age.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    age.text = age.text + keys[0].upper()
                    modify = False
                else:
                    age.text = age.text + keys[0]
      End Routine:
        thisExp.addData("age_string", age.text)
    TextComponent demo3_instr
      color = black
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = What is your age?
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    TextComponent demo3_submit_text
      color = black
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press ENTER/RETURN to submit response.
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    TextComponent age
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine demo_4
    CodeComponent demo4_code
      Code Type = Auto->JS
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      Begin Routine:
        if expInfo['session'] == '001':
            continueRoutine = False
    TextComponent demo4_text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Was English the first language that you learned?


        If yes, press Y.
        If no, press N.
    KeyboardComponent demo4_key
      allowedKeys = 'y','n'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine demo_5
    CodeComponent demo5_code
      Code Type = Auto->JS
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      Begin Routine:
        if expInfo['session'] == '001':
            continueRoutine = False

        modify = False
        language.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                language.text = language.text + ' '
            elif 'backspace' in keys:
                language.text = language.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    language.text = language.text + keys[0].upper()
                    modify = False
                else:
                    language.text = language.text + keys[0]
      End Routine:
        thisExp.addData("typedWord", language.text)
    TextComponent dem05_text
      color = black
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        What age did you begin learning English?
        (enter 0 for native speaker)
    TextComponent demo5_submit_text
      color = black
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press ENTER/RETURN to submit response.
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    TextComponent language
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine demo_6
    TextComponent demo6_text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Do you have any history of neurological issues such as stroke, head injury or a neurodegenerative disorder?


        If yes, press Y.
        If no, press N.
    KeyboardComponent demo6_key
      allowedKeys = 'y','n'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine demo_inst2
    CodeComponent demo_inst2_code
      Code Type = Auto->JS
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      Begin Routine:
        if expInfo['session'] == '001':
            continueRoutine = False
    TextComponent demo_inst2_text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        For the following open-ended questions, type your response using the keyboard and press ENTER/RETURN when you are finished.

        Press ENTER/RETURN to continue.
    KeyboardComponent demo_inst2_key
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine train_end
    TextComponent train_end_text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = This concludes the training phase. Please let the researcher know you have finished and they will instruct you on the next phase of the experiment. 
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    KeyboardComponent key_resp
      allowedKeys = 'q'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine test_end
    CodeComponent endtest_text_code
      Code Type = Auto->JS
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      Begin Routine:
        if expInfo['session'] == '001':
            continueRoutine = False
    TextComponent test_end_text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You have finished the testing phase.

        You will now complete a short demographics questionaire.

        Press SPACE to continue
    KeyboardComponent test_end_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine train_seed
    CodeComponent train_seed_code
      Code Type = Auto->JS
  Routine initializing
    CodeComponent seeds_and_paths
      Code Type = Auto->JS
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      Begin Experiment:
        #import important packages
        import pandas
        import csv
        import random

        #set random seed for experiment
        random_seed = int(expInfo['participant'])
        random.seed(random_seed)

        #create list of random numbers to randomize run order for each participant
        train_run_order = random.sample(range(1,100), 8)
        print(train_run_order)
        test_run_order = random.sample(range(1,100), 2)
        print(test_run_order)

        #define stimulus sets and categories
        stim_set1 = '/Volumes/shares/Cabi/stimuli/cartoon_animals/Set1/'
        stim_set2 = '/Volumes/shares/Cabi/stimuli/cartoon_animals/Set2/'
        category1 = {'categorya': 'Batmans', 'categoryb': 'Robins'}
        category2 = {'categorya': 'Wallaces', 'categoryb': 'Gromets'}
        if expInfo['session'] == '001':
            if (int(expInfo['participant'])%4) == 0:
                stimulus_set = stim_set1
                session_cat = category1
            if (int(expInfo['participant'])%4) == 1:
                stimulus_set = stim_set2
                session_cat = category1
            if (int(expInfo['participant'])%4) == 2:
                stimulus_set = stim_set1
                session_cat = category2
            if (int(expInfo['participant'])%4) == 3:
                stimulus_set = stim_set2
                session_cat = category2

        if expInfo['session'] == '002':
            if (int(expInfo['participant']) %4) == 0:
                stimulus_set = stim_set2
                session_cat = category2
            if (int(expInfo['participant'])%4) == 1:
                stimulus_set = stim_set1
                session_cat = category2
            if (int(expInfo['participant'])%4) == 2:
                stimulus_set = stim_set2
                session_cat = category1
            if (int(expInfo['participant'])%4) == 3:
                stimulus_set = stim_set1
                session_cat = category1

        # define the image size depending on where the image is coming from
        if stimulus_set == stim_set2:
            img_size = [0.55, 0.55]
        if stimulus_set == stim_set1:
            img_size = [0.4,0.6]
    CodeComponent random_proto
      Code Type = Auto->JS
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      Begin Routine:
        # import the script and use the randpro_select function to establish a random prototype for the rest of the experiment
        import stim_build as sb
        randpro = sb.randpro_select('/Volumes/shares/Cabi/exp/joplin/joplin1/stim_files/prototype.csv', random_seed)
        print(randpro)
Flow
  Routine welcome_initializing
  Routine train_instruct1
  Routine train_instruct2
  Routine train_begin
  LoopInitiator train_runs loopType="TrialHandler"
    conditionsFile = stim_files/train_runs_cond.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'train_set': '/Volumes/shares/Cabi/exp/joplin/joplin1/data/_train_cond.csv'},
      {'train_set': '/Volumes/shares/Cabi/exp/joplin/joplin1/data/_train_cond.csv'},
      {'train_set': '/Volumes/shares/Cabi/exp/joplin/joplin1/data/_train_cond.csv'},
      {'train_set': '/Volumes/shares/Cabi/exp/joplin/joplin1/data/_train_cond.csv'},
      {'train_set': '/Volumes/shares/Cabi/exp/joplin/joplin1/data/_train_cond.csv'},
      {'train_set': '/Volumes/shares/Cabi/exp/joplin/joplin1/data/_train_cond.csv'},
      {'train_set': '/Volumes/shares/Cabi/exp/joplin/joplin1/data/_train_cond.csv'},
      {'train_set': '/Volumes/shares/Cabi/exp/joplin/joplin1/data/_train_cond.csv'}]
    LoopInitiator train_trials loopType="TrialHandler"
      conditionsFile = $filename + train_set
      loopType = random
      nReps = 3
      random seed = (int(expInfo['session']) + train_run_order[train_runs.thisN])
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      Routine stimTrain
      Routine feedback
      Routine ITI
    LoopTerminator train_trials
    Routine run_break
  LoopTerminator train_runs
  Routine train_end
  Routine test_instruct1
  Routine test_instruct2
  Routine test_begin
  LoopInitiator test_runs loopType="TrialHandler"
    conditionsFile = stim_files/test_runs_cond.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'gen_file': '/Volumes/shares/Cabi/exp/joplin/joplin1/data/genfile1.csv'},
      {'gen_file': '/Volumes/shares/Cabi/exp/joplin/joplin1/data/genfile2.csv'}]
    LoopInitiator test_trials loopType="TrialHandler"
      conditionsFile = $filename + gen_file
      loopType = random
      nReps = 1
      random seed = (int(expInfo['session']) + test_run_order[test_runs.thisN])
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      Routine stimTest
      Routine ITI
    LoopTerminator test_trials
    Routine run_break
  LoopTerminator test_runs
  Routine test_end
  Routine demo_form_instruct1
  Routine demoForm
  Routine demo_inst2
  Routine demo_2
  Routine demo_3
  Routine demo_4
  Routine demo_5
  Routine exp_end
