PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2021.1.4
  Window size (pixels) = [2560, 1440]
  color = $[1,1,1]
  expName = joplin1_online
  logging level = debug
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Routines
  Routine feedback
    CodeComponent feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        if not train_key.keys:
            feedback = "Oops...you failed to respond within the alloted time"
        elif train_key.corr:
            feedback = f"Correct. It was {category.upper()}"
        else:
            feedback = f"Incorrect. It was {category.upper()}"
    TextComponent feedback_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $feedback
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  Routine stimTest
    CodeComponent code_test
      Code Type = Auto->JS
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      Begin Routine:
        stim_test = '/Volumes/shares/Cabi/stimuli/cartoon_animals/Set1/' + str(stim_id.replace('\'', '')) + '.jpg'
    ImageComponent test_image
      image [set every repeat] = $stim_test
      interpolate = nearest
      pos = (-0.05, 0.1)
      size = [0.45,0.675]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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    KeyboardComponent test_key
      allowedKeys = 'f','j'
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
      storeCorrect = True
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    TextComponent batmans_text_test
      color = black
      letterHeight = 0.08
      pos = [-0.35,-0.35]
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
      text = Batmans
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    TextComponent robins_text_test
      color = black
      letterHeight = 0.08
      pos = [0.35,-0.35]
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
      text = Robins
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  Routine stimTrain
    CodeComponent code_train
      Code Type = Auto->JS
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      Begin Routine:
        # rename the stim_id to match image names and file path
        train_stim = '/Volumes/shares/Cabi/stimuli/cartoon_animals/Set1/' + str(stim_id.replace('\'', '')) + '.jpg'
    ImageComponent train_image
      image [set every repeat] = $train_stim
      interpolate = nearest
      pos = (-0.05, 0.1)
      size = [0.45, 0.675]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    KeyboardComponent train_key
      allowedKeys [set every repeat] = 'f','j'
      correctAns = $correct_key
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
      storeCorrect = True
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    TextComponent batmans_text
      color = black
      letterHeight = 0.08
      pos = [-.35,-.35]
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
      text [set every repeat] = Batmans
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    TextComponent robins_text
      color = black
      letterHeight = 0.08
      pos = [0.35,-0.35]
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
      text [set every repeat] = Robins
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  Routine ITItest
  Routine fix1000
    PolygonComponent ITIstim
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine proto_select
  Routine recodeTrain
    CodeComponent recode_train_stim
      Code Type = Auto->JS
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      Begin Experiment:
        import csv
        import random

        with open('/Volumes/shares/Cabi/exp/joplin/joplin1/stim_files/Prototype.csv', encoding='utf-8-sig') as proto_file:
        	proto_file = csv.reader(proto_file)

        	# create a list of lists containing each for in the prototype file
        	proto_list = []
        	for row in proto_file:
        		proto_list.append(row)
        	# Add a random seed. Randomly choose a row from the prototype file and assign it as the random prototype
        random.seed(None)
        randpro = random.choice(proto_list)

        	# Turn the randomp prototype into a list of integers instead of strings to make comparisons
        for item in range(0, len(randpro)):
        	randpro[item] = int(randpro[item])



        	# Open training file and turn each row into a list of integers instead of strings. Count the number of stimulus (rows) there are in the file.
        with open('/Volumes/shares/Cabi/exp/joplin/joplin1/stim_files/dev_train.csv', encoding='utf-8-sig') as sf:
        	sf = csv.reader(sf)
        	rows = list(sf)
        	count = (list(range(len(rows))))

        	# Make a new list that contains a list for each row in the stimlus file as integers instead of strings.
        	stimulus_list = []
        	for i in count:
        		new_row = []
        		for element in rows[i]:
        			new_row.append(int(element))
        		stimulus_list.append(new_row)

        	# create a list of all 1's to compare to the randomly selected prototype later
        all1proto = [1, 1, 1, 1, 1, 1, 1, 1, 1, 1]

        	# Compare the randomly selected prototype to the all 1's. If it is the same, then take the stimulus file as is and add the necessary columns.
        if randpro == all1proto:

        	stim_id = []
        	sums_feat = []
        	category = []
        	correct_key = []
        	for item in stimulus_list:
        		# calculate the sum of the number of features each stimulus has in common with the protoype
        		sums = sum(item)
        		sums_feat.append(sums)

        		# define the categories based on sum_feat
        		if sums > 5:
        			cat = 'batmans'
        		else:
        			cat = 'robins'

        	# define which key is correct based on the category it is assigned
        		if cat == 'batmans':
        			key_corr = 'f'
        		elif cat == 'robins':
        			key_corr = 'j'
        		correct_key += [key_corr]

        		# append cat to category. Have to use different operation because .append doesn't work for strings
        		category += [cat]

        		# now that all the manipulations are done, we need to concatenate the recoded stimuli to match the file names.
        		string = ''.join([str(item) for item in item])
        		string = ''.join('\'' + string + '\'')
        		stim_id += [string]

        	# If the randomly selected prototype is not all 1's then we need to recode the stimulus and add the necessary rows.
        	else:
        		# get the number of stimuli in the stim_file and create a list of the range of numbers.
        		count_stim_list = list(range(len(stimulus_list)))

        		# count the number of items in the prototype and create a list for the range of numbers. Should always be 10 for the 10 features.
        	count_randpro = (list(range(len(randpro))))

        		# create empty list for each column we want in our csv
        	comparison = []
        	stim_id = []
        	sums_feat = []
        	category = []
        	correct_key = []

        		# make a new variable defining the stimulus we are currently working with as "stim"
        	for i in count_stim_list:
        		stim = stimulus_list[i]

        			# create another empty list to store the comparisons between the prototype and the current stimulus
        		new_code = []
        		for n in count_randpro:
        			if stim[n] == randpro[n]:
        				output = bool('True')
        			else:
        				output = bool('')

        				# turn the boolean phrases into into integers for the new code. Append each item to the rest of the items within the stimulus
        			new_code.append(output * 1)

        			# Add the recoded stimuli into the same list. We only need this list to check that the recode worked. It won't be going in the csv
        		comparison.append(new_code)

        			# compare the new code to the stimuli to get the number of features that match so we can add them up and determine the category
        		compare_cat = []
        		for x in count_randpro:
        			if new_code[x] == randpro[x]:
        				output = bool('True')
        			else:
        				output = bool('')
        			compare_cat.append(output*1)

        			# find a sum of the number of features each stimulus has in common with the prototype
        		sums = sum(compare_cat)
        		sums_feat.append(sums)

        			# define the categories based on the number of features each stimulus has in common with the prototype
        		if sums > 5:
        			cat = 'batmans'
        		else:
        			cat = 'robins'
        		category += [cat]

        			# define which key is correct based on the category it is assigned
        		if cat == 'batmans':
        			key_corr = 'f'
        		elif cat == 'robins':
        			key_corr = 'j'
        		correct_key += [key_corr]

        			# now that all the manipulations are done, we can to concatenate the recoded stimuli to match the file names
        		string = ''.join([str(item) for item in new_code])
        			# added quotations so that the leading zeros are not removed when writing to the csv file. Will take them off in psychopy
        		string = ''.join('\'' + string + '\'')
        		stim_id += [string]

        	# write the results to a new csv file.
        	with open('/Volumes/shares/Cabi/exp/joplin/joplin1/data/_stimfile.csv', 'w', newline='') as stim_file:
        		writer = csv.writer(stim_file)
        		writer.writerow(('stim_id', 'sums_feat', 'category', 'correct_key'))
        		for i in range(len(stim_id)):
        			writer.writerow((stim_id[i], sums_feat[i], category[i], correct_key[i]))

        os.rename('/Volumes/shares/Cabi/exp/joplin/joplin1/data/_stimfile.csv', filename + '_stimfile_train.csv')
  Routine recodeTest
    CodeComponent recode_test_stim
      Code Type = Auto->JS
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      Begin Routine:
        import csv
        import random

        with open('/Volumes/shares/Cabi/exp/joplin/joplin1/stim_files/Prototype.csv', encoding='utf-8-sig') as proto_file:
        	proto_file = csv.reader(proto_file)

        	# create a list of lists containing each for in the prototype file
        	proto_list = []
        	for row in proto_file:
        		proto_list.append(row)
        	# Add a random seed. Randomly choose a row from the prototype file and assign it as the random prototype
        random.seed(None)
        randpro = random.choice(proto_list)

        	# Turn the randomp prototype into a list of integers instead of strings to make comparisons
        for item in range(0, len(randpro)):
        	randpro[item] = int(randpro[item])



        	# Open training file and turn each row into a list of integers instead of strings. Count the number of stimulus (rows) there are in the file.
        with open('/Volumes/shares/Cabi/exp/joplin/joplin1/stim_files/dev_train.csv', encoding='utf-8-sig') as sf:
        	sf = csv.reader(sf)
        	rows = list(sf)
        	count = (list(range(len(rows))))

        	# Make a new list that contains a list for each row in the stimlus file as integers instead of strings.
        	stimulus_list = []
        	for i in count:
        		new_row = []
        		for element in rows[i]:
        			new_row.append(int(element))
        		stimulus_list.append(new_row)

        	# create a list of all 1's to compare to the randomly selected prototype later
        all1proto = [1, 1, 1, 1, 1, 1, 1, 1, 1, 1]

        	# Compare the randomly selected prototype to the all 1's. If it is the same, then take the stimulus file as is and add the necessary columns.
        if randpro == all1proto:

        	stim_id = []
        	sums_feat = []
        	category = []
        	correct_key = []
        	for item in stimulus_list:
        		# calculate the sum of the number of features each stimulus has in common with the protoype
        		sums = sum(item)
        		sums_feat.append(sums)

        		# define the categories based on sum_feat
        		if sums > 5:
        			cat = 'batmans'
        		else:
        			cat = 'robins'

        	# define which key is correct based on the category it is assigned
        		if cat == 'batmans':
        			key_corr = 'f'
        		elif cat == 'robins':
        			key_corr = 'j'
        		correct_key += [key_corr]

        		# append cat to category. Have to use different operation because .append doesn't work for strings
        		category += [cat]

        		# now that all the manipulations are done, we need to concatenate the recoded stimuli to match the file names.
        		string = ''.join([str(item) for item in item])
        		string = ''.join('\'' + string + '\'')
        		stim_id += [string]

        	# If the randomly selected prototype is not all 1's then we need to recode the stimulus and add the necessary rows.
        	else:
        		# get the number of stimuli in the stim_file and create a list of the range of numbers.
        		count_stim_list = list(range(len(stimulus_list)))

        		# count the number of items in the prototype and create a list for the range of numbers. Should always be 10 for the 10 features.
        	count_randpro = (list(range(len(randpro))))

        		# create empty list for each column we want in our csv
        	comparison = []
        	stim_id = []
        	sums_feat = []
        	category = []
        	correct_key = []

        		# make a new variable defining the stimulus we are currently working with as "stim"
        	for i in count_stim_list:
        		stim = stimulus_list[i]

        			# create another empty list to store the comparisons between the prototype and the current stimulus
        		new_code = []
        		for n in count_randpro:
        			if stim[n] == randpro[n]:
        				output = bool('True')
        			else:
        				output = bool('')

        				# turn the boolean phrases into into integers for the new code. Append each item to the rest of the items within the stimulus
        			new_code.append(output * 1)

        			# Add the recoded stimuli into the same list. We only need this list to check that the recode worked. It won't be going in the csv
        		comparison.append(new_code)

        			# compare the new code to the stimuli to get the number of features that match so we can add them up and determine the category
        		compare_cat = []
        		for x in count_randpro:
        			if new_code[x] == randpro[x]:
        				output = bool('True')
        			else:
        				output = bool('')
        			compare_cat.append(output*1)

        			# find a sum of the number of features each stimulus has in common with the prototype
        		sums = sum(compare_cat)
        		sums_feat.append(sums)

        			# define the categories based on the number of features each stimulus has in common with the prototype
        		if sums > 5:
        			cat = 'batmans'
        		else:
        			cat = 'robins'
        		category += [cat]

        			# define which key is correct based on the category it is assigned
        		if cat == 'batmans':
        			key_corr = 'f'
        		elif cat == 'robins':
        			key_corr = 'j'
        		correct_key += [key_corr]

        			# now that all the manipulations are done, we can to concatenate the recoded stimuli to match the file names
        		string = ''.join([str(item) for item in new_code])
        			# added quotations so that the leading zeros are not removed when writing to the csv file. Will take them off in psychopy
        		string = ''.join('\'' + string + '\'')
        		stim_id += [string]

        	# write the results to a new csv file.
        	with open('/Volumes/shares/Cabi/exp/joplin/joplin1/data/_stimfile.csv', 'w', newline='') as stim_file:
        		writer = csv.writer(stim_file)
        		writer.writerow(('stim_id', 'sums_feat', 'category', 'correct_key'))
        		for i in range(len(stim_id)):
        			writer.writerow((stim_id[i], sums_feat[i], category[i], correct_key[i]))

        os.rename('/Volumes/shares/Cabi/exp/joplin/joplin1/data/_stimfile.csv', filename + '_stimfile_test.csv')
  Routine Welcome_Initializing_Screen
    TextComponent welcome_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Insert welcome text.

        Press SPACE to proceed
    KeyboardComponent welcome_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import csv
        import random
  Routine debrief_thankyou
    TextComponent end_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Add defbrief/thank you

        Press Space to continue
    KeyboardComponent end_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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    CodeComponent end_code
      Code Type = Auto->JS
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      End Experiment:
        # get rid of unecessary conditions file
        os.remove(filename + '_stimfile_train.csv')
        os.remove(filename + '_stimfile_test.csv')
Flow
  Routine Welcome_Initializing_Screen
  Routine recodeTrain
  LoopInitiator trials_train loopType="TrialHandler"
    conditionsFile = $filename + '_stimfile_train.csv'
    loopType = random
    nReps = 1
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    Routine stimTrain
    Routine feedback
    Routine fix1000
  LoopTerminator trials_train
  Routine recodeTest
  LoopInitiator trials_test loopType="TrialHandler"
    conditionsFile = $filename + '_stimfile_test.csv'
    loopType = random
    nReps = 1
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    Routine stimTest
    Routine fix1000
  LoopTerminator trials_test
  Routine debrief_thankyou
