PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  color = white
  expName = joplin1
  logging level = debug
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Routines
  Routine stimTrain
    CodeComponent train_code
      Code Type = Auto->JS
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      Begin Routine:
        # define the image path for the image component
        train_stim = ('/Volumes/shares/Cabi/stimuli/cartoon_animals/Set1/' + str(stim_id.replace(' ', '')) + '.jpg')
    ImageComponent train_image
      image [set every repeat] = $train_stim
      interpolate = nearest
      pos = (-0.05, 0.1)
      saveStartStop = False
      size = [0.4,0.6]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    TextComponent batmans_train
      color = black
      letterHeight = 0.1
      pos = (-0.35, -0.35)
      saveStartStop = False
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 2.0
      text = Batmans
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    TextComponent robins_train
      color = black
      letterHeight = 0.1
      pos = (0.35, -0.35)
      saveStartStop = False
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 2.0
      text = Robins
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    KeyboardComponent train_key
      allowedKeys = 'f','j'
      correctAns = $correct_key
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
      storeCorrect = True
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  Routine feedback
    CodeComponent feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        if not train_key.keys:
            feedback = 'Oops...you failed to respons within the alloted time'
        elif train_key.corr == 1:
            feedback = 'Correct, the answer was ' + category
        else:
            feedback = 'Incorrect, the answer was ' + category
    TextComponent feedback_text
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $feedback
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  Routine ITI
    PolygonComponent fix1000
      fillColor = black
      saveStartStop = False
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine welcome_initializing
    CodeComponent random_proto
      Code Type = Auto->JS
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      Begin Experiment:
        #import packages necessary for scripts
        import pandas
        import csv

        # import the script and use the randpro_select function to establish a random prototype for the rest of the experiment
        import recode_stim_script as rs
        randpro = rs.randpro_select('/Volumes/shares/Cabi/exp/joplin/joplin1/stim_files/prototype.csv')
        print(randpro)
    TextComponent welcome_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        Before starting, PLEASE TURN OFF AND PUT AWAY YOUR CELL PHONE and ensure there are no other distractions present in your environment. Please read all on-screen instructions carefully.

        First we would like you to know about your rights as a participant.

        Press SPACE to continue.
    KeyboardComponent welcome_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine build_stim_train
    CodeComponent stim_train_recode
      Code Type = Auto->JS
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      Begin Experiment:
        # run the create_train_set to create the training set, recoded to match the prototype
        #output will be /data/_training_stim
        rs.create_train_set('/Volumes/shares/Cabi/exp/joplin/joplin1/stim_files/train_file.csv', randpro)

        # this refers to the training file that will be needed to create the generalization sets
        training_stimuli = '/Volumes/shares/Cabi/exp/joplin/joplin1/data/_training_stim.csv'
      Begin Routine:
        # Take the training set and input into the cond_file_build function. This functino will add all the necessary components to the file, like the category and correct key response.
        rs.cond_file_build(training_stimuli)

        #rename the file to train_conditions and use this file for the loop.
        os.rename('/Volumes/shares/Cabi/exp/joplin/joplin1/data/_cond_file.csv', '/Volumes/shares/Cabi/exp/joplin/joplin1/data/_train_cond.csv')
  Routine build_stim_test
    CodeComponent stim_test_recode
      Code Type = Auto->JS
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      Begin Experiment:
        #run the gen_build function to produce a generalization set. Will output to /data/genfile1 and data/genfile2
        import generalization_build_script as gb
        gen_set = gb.gen_build(training_stimuli, '/Volumes/shares/Cabi/exp/joplin/joplin1/stim_files/prototype.csv', 10)

        #recode the gen files to match the prototype
        rs.stim_build('/Volumes/shares/Cabi/exp/joplin/joplin1/data/genfile1.csv', randpro)
        os.rename('/Volumes/shares/Cabi/exp/joplin/joplin1/data/_stimfile.csv', '/Volumes/shares/Cabi/exp/joplin/joplin1/data/genfile1.csv')
        rs.stim_build('/Volumes/shares/Cabi/exp/joplin/joplin1/data/genfile2.csv', randpro)
        os.rename('/Volumes/shares/Cabi/exp/joplin/joplin1/data/_stimfile.csv', '/Volumes/shares/Cabi/exp/joplin/joplin1/data/genfile2.csv')
  Routine stimTest
    CodeComponent test_code
      Code Type = Auto->JS
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      Begin Routine:
        test_stim = ('/Volumes/shares/Cabi/stimuli/cartoon_animals/Set1/' + str(stim_id.replace(' ', '')) + '.jpg')
    ImageComponent test_image
      image [set every repeat] = $test_stim
      interpolate = nearest
      pos = (-0.05, 0.1)
      saveStartStop = False
      size = [0.4,0.6]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    TextComponent batmans_test
      color = black
      letterHeight = 0.1
      pos = (-0.35, -0.35)
      saveStartStop = False
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 2.0
      text = Batmans
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    TextComponent robins_test
      color = black
      letterHeight = 0.1
      pos = (0.35, -0.35)
      saveStartStop = False
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 2.0
      text = Robins
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    KeyboardComponent test_key
      allowedKeys = 'f','j'
      correctAns = $correct_key
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
      storeCorrect = True
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  Routine debrief
    CodeComponent code
      Code Type = Auto->JS
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      End Experiment:
        os.remove(filename + '_test_stim.csv')
        os.remove(filename + '_train_stim.csv')
        #os.remove('/Volumes/shares/Cabi/exp/joplin/joplin1/data/genfile1.csv')
        os.rename('/Volumes/shares/Cabi/exp/joplin/joplin1/data/_genfile1.csv')
        os.rename('/Volumes/shares/Cabi/exp/joplin/joplin1/data/_genfile2.csv')
        #os.rename('/Volumes/shares/Cabi/exp/joplin/joplin1/data/genfile2.csv')
    TextComponent debrief_text
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = Thank you for participating in this experiment. We are interested in how people both remember details of specific experiences and how they build general knowledge. The task you completed today involved learning to sort stimuli into categories. In doing so, you needed to form a general idea of what members of each category were like – that is memory for generalities. However, you may have also learned to identify individual category members – that is memory specificity. We are interested in how well people are able to learn both types of information – generalities and specifics – from the same set of stimuli. Do you have any questions about the experiment?
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    KeyboardComponent end_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine demo1
    TextComponent demo1_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Are you Hispanic/Latino?


        If yes, press Y.
        If no, press N.
        If you prefer not to answer, press X.
    KeyboardComponent key_resp
      allowedKeys = 'y','n','x'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine demo
    FormComponent demo_form
      Data Format = rows
      Item Padding = 0.05
      Items = .csv
      Randomize = False
      Style = dark
      Text Height = 0.03
      size = (1, 0.7)
      startVal [time (s)] = 0.0
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  Routine run_break
    TextComponent run_break_text
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You will now be given a short break before continuing the experiment. When you are ready to proceed, press SPACE.
    KeyboardComponent break_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine welcome_initializing
  Routine build_stim_train
  LoopInitiator train_runs loopType="TrialHandler"
    conditionsFile = train_cond.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'train_set': '/Volumes/shares/Cabi/exp/joplin/joplin1/data_train_cond.csv'},
      {'train_set': '/Volumes/shares/Cabi/exp/joplin/joplin1/data_train_cond.csv'},
      {'train_set': '/Volumes/shares/Cabi/exp/joplin/joplin1/data_train_cond.csv'},
      {'train_set': '/Volumes/shares/Cabi/exp/joplin/joplin1/data_train_cond.csv'},
      {'train_set': '/Volumes/shares/Cabi/exp/joplin/joplin1/data_train_cond.csv'},
      {'train_set': '/Volumes/shares/Cabi/exp/joplin/joplin1/data_train_cond.csv'},
      {'train_set': '/Volumes/shares/Cabi/exp/joplin/joplin1/data_train_cond.csv'},
      {'train_set': '/Volumes/shares/Cabi/exp/joplin/joplin1/data_train_cond.csv'}]
    LoopInitiator train_trials loopType="TrialHandler"
      conditionsFile = $train_set
      loopType = random
      nReps = 3
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      Routine stimTrain
      Routine feedback
      Routine ITI
    LoopTerminator train_trials
    Routine run_break
  LoopTerminator train_runs
  Routine build_stim_test
  LoopInitiator test_runs loopType="TrialHandler"
    conditionsFile = test_cond.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'gen_file': 'filename/_genfile1.csv'},
      {'gen_file': 'filename/_genfile2.csv'}]
    LoopInitiator test_trials loopType="TrialHandler"
      conditionsFile = $gen_file
      loopType = random
      nReps = 1
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      Routine stimTest
      Routine ITI
    LoopTerminator test_trials
    Routine run_break
  LoopTerminator test_runs
  Routine debrief
