PsychoPy2experiment version="2021.2.3"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['participant'], expInfo['session'], expName)
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = joplin_rebuild
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Routines
  Routine trial
    ImageComponent train_image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine welcome
    CodeComponent welcome_code
      Code Type = Auto->JS
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      Begin Experiment:
        #define random seeds
        import random
        random_seed = expInfo(['participant'])
        random.seed(random_seed)

        #set paths to stimulus sets
        stim_set1 = '/Volumes/shares/Cabi/stimuli/cartoon_animals/Set1'
        stim_set2 = '/Volumes/shares/Cabi/stimuli/cartoon_animals/Set2'

        #define categories
        category1 = {'categorya': 'Batmans', 'categoryb': 'Robins'}
        category2 = {'categorya': 'Wallaces', 'categoryb': 'Gromets'}
        if expInfo['session'] == '001':
            if (int(expInfo['participant'])%4) == 0:
                stimulus_set = stim_set1
                session_cat = category1
            if (int(expInfo['participant'])%4) == 1:
                stimulus_set = stim_set2
                session_cat = category1
            if (int(expInfo['participant'])%4) == 2:
                stimulus_set = stim_set1
                session_cat = category2
            if (int(expInfo['participant'])%4) == 3:
                stimulus_set = stim_set2
                session_cat = category2

        if expInfo['session'] == '002':
            if (int(expInfo['participant']) %4) == 0:
                stimulus_set = stim_set2
                session_cat = category2
            if (int(expInfo['participant'])%4) == 1:
                stimulus_set = stim_set1
                session_cat = category2
            if (int(expInfo['participant'])%4) == 2:
                stimulus_set = stim_set2
                session_cat = category1
            if (int(expInfo['participant'])%4) == 3:
                stimulus_set = stim_set1
                session_cat = category1

        # define the image size depending on where the image is coming from
        if stimulus_set == stim_set2:
            img_size = [0.55, 0.55]
        if stimulus_set == stim_set1:
            img_size = [0.4,0.6]

        # import the script and use the randpro_select function to establish a random prototype for the rest of the experiment
        import stim_build as sb
        randpro = sb.randpro_select('/Volumes/shares/Cabi/exp/joplin/joplin1/stim_files/prototype.csv', random_seed)
        print(randpro)
      Begin Routine:
        if expInfo['session'] == '001':
            welc_text = u'Welcome to the experiment! \n\n You will first complete a training phase where you will be presented images of cartoon animals and asked to determine whether they belong to the %s group or the %s group.\n\n You will not know which group the animals belong to at first. However, you will be given feedback on your answer, which you can then use to help you group the animals.\n\n Press SPACE to continue with the instructions.' % (session_cat['categorya'], session_cat['categoryb'])
        if expInfo['session'] == '002':
            welc_text = u'Welcome to the experiment!\n\n Similar to the last session, you will start by completing a training phase where you will group cartoon animals into two different groups. This time, you will be asked to determine if the animal belongs to the %s group or the %s group. Remember, you will not know which group the animal belongs to at first, but will be given feedback on your answers that you can then use to help you group the animals.\n\n Press SPACE to continue with the instructions.' % (session_cat['categorya'], session_cat['categoryb'])
    TextComponent welcome_text
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = welc_text
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    KeyboardComponent welcome_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine train_instruct1
    CodeComponent inst1_code
      Code Type = Auto->JS
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      Begin Routine:
        inst1_train_text = u'For each image, you will have 3 seconds to give your response before the computer automatically moves to the next screen.\n\n To select %s, press "f".\n To select %s, press "j".\n\n Press "f" or "j" to continue with the instructions.' % (session_cat['categorya'], session_cat['categoryb'])
    TextComponent train_inst1_text
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = inst1_train_text
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    KeyboardComponent train_inst1_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine train_instruct2
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 'You will complete 8 runs of the training phase. Between each run, you will be given the opportunity to take a break. You may take as long as you need before returning to the experiemnt. \n\nPress SPACE to continue. '
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Flow
  Routine welcome
  Routine train_instruct1
  Routine train_instruct2
